Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } A A 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Sucesiones/campamento%20-%209%20pasos/img9.png % % B B 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Sucesiones/campamento%20-%209%20pasos/img5.png % % C C 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Sucesiones/campamento%20-%209%20pasos/img8.png % % D D 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Sucesiones/campamento%20-%209%20pasos/img2.png % % E E 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Sucesiones/campamento%20-%209%20pasos/img7.png % % F F 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Sucesiones/campamento%20-%209%20pasos/img4.png % % G G 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Sucesiones/campamento%20-%209%20pasos/img6.png % % H H 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Sucesiones/campamento%20-%209%20pasos/img1.png % % I I 1 D:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Sucesiones/campamento%20-%209%20pasos/img3.png % % // speller target properties